// ********** Image Types

(FixedInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingInternalImagePixelType "float")
(MovingImageDimension 3)


// ********** Components

(Registration "MultiMetricMultiResolutionRegistrationWithFeatures")
(FixedImagePyramid "FixedSmoothingImagePyramid" "FixedSmoothingImagePyramid" "FixedSmoothingImagePyramid" "FixedSmoothingImagePyramid" "FixedSmoothingImagePyramid" "FixedSmoothingImagePyramid" "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator" "BSplineInterpolator" "BSplineInterpolator" "BSplineInterpolator" "BSplineInterpolator" "BSplineInterpolator" "BSplineInterpolator")
(Metric "KNNGraphAlphaMutualInformation" "StatisticalShapeFeatsPenalty")
(Optimizer "StandardGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 3)
(ImagePyramidSchedule 8 8 4 4 4 2 2 2 1)
(FixedImageBSplineInterpolatorOrder 1)


// ********** Transform

(FinalGridSpacingInPhysicalUnits 15.0 15.0 15.0)
(GridSpacingSchedule 4.0 2.0 1.0)
(HowToCombineTransforms "Compose")


// ********** Optimizer

// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 300)

//SP: Param_a in each resolution level. a_k = a/(A+k+1)^alpha
(SP_a 200.0)

//SP: Param_alpha in each resolution level. a_k = a/(A+k+1)^alpha
(SP_alpha 0.602)

//SP: Param_A in each resolution level. a_k = a/(A+k+1)^alpha
(SP_A 50.0)


// ********** Metric

(Metric0Weight 1 1 1)
(Metric1Weight 0.8 0.7 0.6)

(Alpha 0.99)
(AvoidDivisionBy 0.0000000001)
(TreeType "KDTree")
(BucketSize 50)
(SplittingRule "ANN_KD_STD")
(ShrinkingRule "ANN_BD_SIMPLE")
(TreeSearchType "Standard")
(KNearestNeighbours 5)
(ErrorBound 10.0)

(NormalizedShapeModel "false")
(ShapeModelCalculation 0)
(ShrinkageIntensityFeats 0.2)
(BaseVarianceFeats 1000.0)
(CutOffValue 0)
(SubtractMean "true")


// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImageAfterEachResolution "false")
(WriteResultImage "false")
(ShowExactMetricValue "false")
(ErodeMask "true")


// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "MultiInputRandomCoordinate")
(NumberOfSpatialSamples 5000)
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)